// CLIJ example macro: autoThreshold.ijm
//
// This macro shows how to apply an automatic 
// threshold method to an image in the GPU.
//
// Author: Robert Haase
// December 2018
// ---------------------------------------------


// Get test data
run("Blobs (25K)");
//open("C:/structure/data/blobs.gif");
getDimensions(width, height, channels, slices, frames);
input = getTitle();

mask = "Mask";

// Init GPU
run("CLIJ2 Macro Extensions", "cl_device=");
Ext.CLIJ2_clear();

// push data to GPU
Ext.CLIJ2_push(input);

// cleanup ImageJ
run("Close All");

// create a mask using a threshold
 algorithm
Ext.CLIJ2_thresholdOtsu(input, mask, "Otsu");

// show result
Ext.CLIJ2_pullBinary(mask);
