// CLIJ example macro: bitdepthConversion.ijm
//
// This macro shows how change the bit-depth of 
// images in the GPU.
//
// Author: Robert Haase
// March 2019
// ---------------------------------------------



// create an image with 32-bit
newImage("image32", "32-bit ramp", 20, 20, 1);
image32 = getTitle();

// init GPU
run("CLIJ2 Macro Extensions", "cl_device=");
Ext.CLIJ2_clear();

// send image to GPU
Ext.CLIJ2_push(image32);

// scale the image pixel intensities with a given factor
intensityScalingFactor = 255;
Ext.CLIJ2_multiplyImageAndScalar(image32, temp, intensityScalingFactor);

// convert it to 8 bit
Ext.CLIJ2_convertUInt16(temp, image16);

// get converted image back from GPU
Ext.CLIJ2_pull(image16);

